OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.2)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "1"
  Channel List = 1
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 0.1
  High cut frequency (Hz) = 50
  Pass band ripple (dB) = 0.5
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band stop
  Filter order = 4
  Low cut frequency (Hz) = 48
  High cut frequency (Hz) = 52
  Pass band ripple (dB) = 0.5
-> 0xc67a01dc TCP Writer
  Port = 7676
  Output format = Raw
